CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:Image_01_(?P<Site>[0-9]{2})_01_01.oif.files
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C001")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C002")
    Name to assign these images:Venus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C003")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C004")
    Name to assign these images:Sox2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Venus
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:EdU
    Name the output image:IllumRed
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Sox2
    Name the output image:IllumFR
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Select the input image:Venus
    Name the output image:CorrVenus
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Divide
    Select the input image:EdU
    Name the output image:CorrEdu
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Divide
    Select the input image:Sox2
    Name the output image:CorrSox2
    Select the illumination function:IllumFR
    Select how the illumination function is applied:Divide

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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